PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = $'https://ucsb.sona-systems.com/webstudy_credit.aspx?experiment_id=4585&credit_token=ad221f37cfd8466c87ed8a426a1d2cce&survey_code=' + expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Demos_Stimuli/D_physics.png', 'AC1_Stimuli/AC_2.png', 'AC1_Stimuli/AC_1.png', 'ACF_Stimuli/ACF_Final.png', 'ACF_Stimuli/ACF_Final2.png', 'WS_Stimuli/WS_1.png', 'WS_Stimuli/WS_2.png', 'WS_Stimuli/WS_3.png', 'WS_Stimuli/WS_4.png', 'WS_Stimuli/WS_5.png', 'WS_Stimuli/WS_6.png', 'WS_Stimuli/WS_7.png', 'WS_Stimuli/WS_8.png', 'WS_Stimuli/WS_9.png', 'WS_Stimuli/WS_10.png', 'WS_Stimuli/WS_11.png', 'WS_Stimuli/WS_12.png', 'WS_Stimuli/WS_13.png', 'WS_Stimuli/WS_14.png', 'WS_Stimuli/WS_Instructions1.png', 'AO_Stimuli/AO_1.png', 'AO_Stimuli/AO_2.png', 'AO_Stimuli/AO_3.png', 'AO_Stimuli/AO_4.png', 'AO_Stimuli/AO_5.png', 'AO_Stimuli/AO_6.png', 'AO_Stimuli/AO_7.png', 'AO_Stimuli/AO_8.png', 'AO_Stimuli/AO_9.png', 'AO_Stimuli/AO_10.png', 'AO_Stimuli/AO_11.png', 'AO_Stimuli/AO_12.png', 'AO_Stimuli/AO_13.png', 'AO_Stimuli/AO_14.png', 'AO_Stimuli/AO_15.png', 'AO_Stimuli/AO_16.png', 'AO_Stimuli/AO_17.png', 'AO_Stimuli/AO_18.png', 'AO_Stimuli/AO_19.png', 'AO_Stimuli/AO_20.png', 'AO_Stimuli/AO_21.png', 'AO_Stimuli/AO_22.png', 'AO_Stimuli/AO_23.png', 'AO_Stimuli/AO_24.png', 'AO_Stimuli/AO_25.png', 'PSVT_Stimuli/PSVT_Instructions5.png', 'VK_Stimuli/VK_Instructions4R.png', 'SD_Stimuli/SD_Instructions3R.png', 'SBST_Stimuli/SBST_InstructionsP2R.png', 'PSVT_Stimuli/PSVT_Instructions3R.png', 'PFT_Stimuli/PFT_InstructionsP2R.png', 'MC_Stimuli/MC_Instructions3R.png', 'Flags_Stimuli/Flags_Instructions4R.png', 'DAT_Stimuli/DAT_Instructions3R.png', 'AO_Stimuli/AO_Instructions1.png', 'AO_Stimuli/AO_Instructions2.png', 'AO_Stimuli/AO_Instructions3.png', 'AO_Stimuli/AO_Instructions3F.png', 'AO_Stimuli/AO_Instructions3F2.png', 'AO_Stimuli/AO_Instructions3R.png', 'AO_Stimuli/AO_Instructions4.png', 'AO_Stimuli/AO_Instructions5.png', 'PSVT_Stimuli/PSVT_Instructions3F2.png', 'PSVT_Stimuli/PSVT_Instructions3F.png', 'Demos_Stimuli/D_Instructions1.png', 'Demos_Stimuli/D_age.png', 'Demos_Stimuli/D_ethnicity.png', 'Demos_Stimuli/D_GPA.png', 'Demos_Stimuli/D_language.png', 'Demos_Stimuli/D_math.png', 'Demos_Stimuli/D_parents_ed.png', 'Demos_Stimuli/D_race.png', 'Demos_Stimuli/D_sex.png', 'Demos_Stimuli/D_vision.png', 'VK_Stimuli/VK_Instructions4F.png', 'VK_Stimuli/VK_Instructions4F2.png', 'SD_Stimuli/SD_Instructions3F.png', 'SD_Stimuli/SD_Instructions3F2.png', 'SD_Stimuli/SD_Instructions5.png', 'PFT_Stimuli/PFT_Instructions3.png', 'PFT_Stimuli/PFT_InstructionsP2.png', 'PFT_Stimuli/PFT_InstructionsP2F.png', 'PFT_Stimuli/PFT_InstructionsP2F2.png', 'MC_Stimuli/MC_Instructions3F.png', 'MC_Stimuli/MC_Instructions3F2.png', 'MC_Stimuli/MC_Instructions5.png', 'Flags_Stimuli/Flags_Instructions4F.png', 'Flags_Stimuli/Flags_Instructions4F2.png', 'DAT_Stimuli/DAT_Instructions3F.png', 'DAT_Stimuli/DAT_Instructions3F2.png', 'DAT_Stimuli/DAT_Instructions5.png', 'PFT_Stimuli/PFT_InstructionsP2.png', 'PFT_Stimuli/PFT_InstructionsP2F.png', 'PFT_Stimuli/PFT_InstructionsP2F2.png', 'SBST_Stimuli/SBST_InstructionsP2.png', 'SBST_Stimuli/SBST_InstructionsP2F.png', 'SBST_Stimuli/SBST_InstructionsP2F2.png', 'SBST_Stimuli/SBST_12.png', 'SBST_Stimuli/SBST_InstructionsP2.png', 'SBST_Stimuli/SBST_InstructionsP2F.png', 'MC_Instructions.csv', 'MC_Stimuli.csv', 'SBST_Instructions.csv', 'SBST_Stimuli.csv', 'SBST_Stimuli/SBST_1.png', 'SBST_Stimuli/SBST_4.png', 'SBST_Stimuli/SBST_5.png', 'SBST_Stimuli/SBST_6.png', 'SBST_Stimuli/SBST_7.png', 'SBST_Stimuli/SBST_10.png', 'SBST_Stimuli/SBST_13.png', 'SBST_Stimuli/SBST_17.png', 'SBST_Stimuli/SBST_19.png', 'SBST_Stimuli/SBST_21.png', 'SBST_Stimuli/SBST_22.png', 'SBST_Stimuli/SBST_24.png', 'SBST_Stimuli/SBST_25.png', 'SBST_Stimuli/SBST_27.png', 'SBST_Stimuli/SBST_Instructions1.png', 'SBST_Stimuli/SBST_Instructions2.png', 'SBST_Stimuli/SBST_Instructions3.png', 'SBST_Stimuli/SBST_Instructions4.png', 'SBST_Stimuli/SBST_Instructions5.png', 'SBST_Stimuli/SBST_Instructions6.png', 'MC_Stimuli/MC_Instructions1.png', 'MC_Stimuli/MC_Instructions2.png', 'MC_Stimuli/MC_Instructions3.png', 'MC_Stimuli/MC_Instructions4.png', 'MC_Stimuli/MC1.png', 'MC_Stimuli/MC2.png', 'MC_Stimuli/MC3.png', 'MC_Stimuli/MC4.png', 'MC_Stimuli/MC5.png', 'MC_Stimuli/MC6.png', 'MC_Stimuli/MC7.png', 'MC_Stimuli/MC8.png', 'MC_Stimuli/MC9.png', 'MC_Stimuli/MC10.png', 'MC_Stimuli/MC11.png', 'MC_Stimuli/MC12.png', 'MC_Stimuli/MC13.png', 'MC_Stimuli/MC14.png', 'MC_Stimuli/MC15.png', 'MC_Stimuli/MC16.png', 'MC_Stimuli/MC17.png', 'MC_Stimuli/MC18.png', 'MC_Stimuli/MC19.png', 'MC_Stimuli/MC20.png', 'MC_Stimuli/MC21.png', 'MC_Stimuli/MC22.png', 'MC_Stimuli/MC23.png', 'MC_Stimuli/MC24.png', 'MC_Stimuli/MC25.png', 'MC_Stimuli/PR_1.png', 'MC_Stimuli/PR_2.png', 'MC_Stimuli/PR_3.png', 'MC_Stimuli/PR_4.png', 'MC_Stimuli/PR_8.png', 'MC_Stimuli/PR_10.png', 'MC_Stimuli/PR_11.png', 'MC_Stimuli/PR_13.png', 'MC_Stimuli/PR_14.png', 'MC_Stimuli/PR_15.png', 'break_image.png', 'x_selector.png', 'DAT_Stimuli/DAT_6.png', 'DAT_Stimuli/DAT_10.png', 'DAT_Stimuli/DAT_13.png', 'DAT_Stimuli/DAT_16.png', 'DAT_Stimuli/DAT_23.png', 'DAT_Stimuli/DAT_37.png', 'DAT_Stimuli/DAT_39.png', 'DAT_Stimuli/DAT_42.png', 'DAT_Stimuli/DAT_43.png', 'DAT_Stimuli/DAT_44.png', 'DAT_Stimuli/DAT_46.png', 'DAT_Stimuli/DAT_49.png', 'PSVT_Stimuli/PSVT_1.png', 'PSVT_Stimuli/PSVT_2.png', 'PSVT_Stimuli/PSVT_3.png', 'PSVT_Stimuli/PSVT_4.png', 'PSVT_Stimuli/PSVT_5.png', 'PSVT_Stimuli/PSVT_6.png', 'PSVT_Stimuli/PSVT_7.png', 'PSVT_Stimuli/PSVT_12.png', 'PSVT_Stimuli/PSVT_13.png', 'PSVT_Stimuli/PSVT_14.png', 'PSVT_Stimuli/PSVT_18.png', 'PSVT_Stimuli/PSVT_21.png', 'PSVT_Stimuli/PSVT_24.png', 'PSVT_Stimuli/PSVT_26.png', 'PSVT_Stimuli/PSVT_28.png', 'VK_Stimuli/VK_1.png', 'VK_Stimuli/VK_2.png', 'VK_Stimuli/VK_5.png', 'VK_Stimuli/VK_6.png', 'VK_Stimuli/VK_9.png', 'VK_Stimuli/VK_10.png', 'VK_Stimuli/VK_13.png', 'VK_Stimuli/VK_14.png', 'VK_Stimuli/VK_17.png', 'VK_Stimuli/VK_18.png', 'VK_Stimuli/VK_Instructions1.png', 'VK_Stimuli/VK_Instructions2.png', 'VK_Stimuli/VK_Instructions3.png', 'VK_Stimuli/VK_Instructions4.png', 'VK_Stimuli/VK_Instructions5.png', 'VK_Stimuli/VK_Instructions6.png', 'VK_Stimuli/VK_Instructions7.png', 'VK_Stimuli/VK_Instructions8.png', 'PSVT_Stimuli/PSVT_Instructions1.png', 'PSVT_Stimuli/PSVT_Instructions2.png', 'PSVT_Stimuli/PSVT_Instructions3.png', 'PSVT_Stimuli/PSVT_Instructions4.png', 'SD_Stimuli/SD_1.png', 'SD_Stimuli/SD_2.png', 'SD_Stimuli/SD_3.png', 'SD_Stimuli/SD_5.png', 'SD_Stimuli/SD_7.png', 'SD_Stimuli/SD_8.png', 'SD_Stimuli/SD_9.png', 'SD_Stimuli/SD_10.png', 'SD_Stimuli/SD_11.png', 'SD_Stimuli/SD_12.png', 'SD_Stimuli/SD_Instructions1.png', 'SD_Stimuli/SD_Instructions2.png', 'SD_Stimuli/SD_Instructions3.png', 'SD_Stimuli/SD_Instructions4.png', 'SD_Stimuli/SD_Instructions5.png', 'PFT_Stimuli/PFT_2.png', 'PFT_Stimuli/PFT_3.png', 'PFT_Stimuli/PFT_5.png', 'PFT_Stimuli/PFT_7.png', 'PFT_Stimuli/PFT_9.png', 'PFT_Stimuli/PFT_12.png', 'PFT_Stimuli/PFT_13.png', 'PFT_Stimuli/PFT_16.png', 'PFT_Stimuli/PFT_17.png', 'PFT_Stimuli/PFT_19.png', 'PFT_Stimuli/PFT_Instructions1.png', 'PFT_Stimuli/PFT_Instructions2.png', 'PFT_Stimuli/PFT_Instructions3.png', 'Flags_Stimuli/F_1.png', 'Flags_Stimuli/F_2.png', 'Flags_Stimuli/F_6.png', 'Flags_Stimuli/F_13.png', 'Flags_Stimuli/F_15.png', 'Flags_Stimuli/F_16.png', 'Flags_Stimuli/F_17.png', 'Flags_Stimuli/F_18.png', 'Flags_Stimuli/F_19.png', 'Flags_Stimuli/F_20.png', 'Flags_Stimuli/Flags_Instructions1.png', 'Flags_Stimuli/Flags_Instructions2.png', 'Flags_Stimuli/Flags_Instructions3.png', 'Flags_Stimuli/Flags_Instructions4.png', 'Flags_Stimuli/Flags_Instructions5.png', 'Flags_Stimuli/Flags_Instructions6.png', 'Flags_Stimuli/Flags_Instructions7.png', 'Flags_Stimuli/Flags_Instructions8.png', 'DAT_Stimuli/DAT_Instructions1.png', 'DAT_Stimuli/DAT_Instructions2.png', 'DAT_Stimuli/DAT_Instructions3.png', 'DAT_Stimuli/DAT_Instructions4.png', 'DAT_Stimuli/DAT_Instructions5.png', 'DAT_Instructions.csv', 'DAT_Stimuli.csv', 'PFT_Instructions.csv', 'PFT_Stimuli.csv', 'PSVT_Instructions.csv', 'PSVT_Stimuli.csv', 'SD_Instructions.csv', 'SD_Stimuli.csv', 'selector.png', 'test_list.csv', 'VK_Instructions.csv', 'VK_Stimuli.csv']
  Save csv file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = spatial_battery
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    CodeComponent instructions_code1
      Code Type = Both
      Begin JS Routine:
        let already_set_up = false;

        Pcoords = [];
        Pans_boxes = {};
        Pletters = ["A", "B", "C", "D", "E", "F", "G", "H"];
        currently_selected = [];
        Pclicked_stim = null;
        answerPositionPX = [];
        answerPostiionPY = [];
        sel_size = 0;
        selector_images = [];
        Pms_corr = 0;
        Pms_incorr = 0;
        Pms_points = 0;
        s_or_o = 'S';
        Pcurrently_selected = [];
        SDcurrently_selected = [];
        choice_number = 0;
        retry = instructions_loop.thisTrial['retry'];


        inst_page_string = instructions_loop.thisTrial["instructions_page"];
        item_stim.setImage((stim_folder + "/") + inst_page_string);
        item_stim.size = [1920 * scale, 1080 * scale];

        //move selector box and text entry box off screen until needed
        selector_box.setPos([-2000 * scale, 0]);
        selector_box.setAutoDraw(false);
        selector_box.setAutoDraw(true);
        text_entry_box.setPos([-2000 * scale, 0]);
        text_entry_box.text = '';
        text_entry_box.setAutoDraw(false);
        text_entry_box.setAutoDraw(true);
        //clear feedback text box
        text_box_corr.text = '';
        text_box_corr.setAutoDraw(false);
        text_box_corr.setAutoDraw(true);

        ///////////////////////////////////
        // feedback and att check

        if (instructions_loop.thisTrial["feedback"]){
            inst_feedback_text.setPos([0, 500 * scale]);
            inst_feedback_text.wrapWidth = 1800 * scale;
            inst_feedback_text.height = 35 * scale;
            inst_feedback_text.setAutoDraw(false);
            inst_feedback_text.setAutoDraw(true);

            //show their submitted answer by moving the selector box
            if ((type_of_test === "multiple choice")) {
                already_set_up = true;

                answerPositionPX = instructions_loop.thisTrial["answer_positionPX"];
                answerPositionPY = instructions_loop.thisTrial["answer_positionPY"];

                for (var i, _pj_c = 0, _pj_a = util.range(answerPositionPX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    let l = Pletters[i];
                    Pcoords = [Number(answerPositionPX[i]) * scale, Number(answerPositionPY[i] * scale)];
                    Pcoords = [((-1 * screen_size[0]/2) + Pcoords[0]), (screen_size[1]/2 - Pcoords[1])];
                    Pans_boxes['Pans_box_' + l] = Pcoords;
                }

                selector_size = [Number(instructions_loop.thisTrial["selector_sizeP"][0]) * scale, Number(instructions_loop.thisTrial["selector_sizeP"][1]) * scale];
                selector_box.setSize(selector_size);

                if (prev_ans_index !== undefined && prev_ans_index !== "None" && prev_ans_index > -1){
                    sel_pos = Object.values(Pans_boxes)[prev_ans_index];
                    selector_box.setPos([(sel_pos[0] + (selector_box.size[0] / 2)), (sel_pos[1] - (selector_box.size[1] / 2))]);
                    selector_box.setAutoDraw(true);
                } else {
                    selector_box.setPos(-2000 * scale, 0);
                    selector_box.setAutoDraw(false);
                }

            } else if (type_of_test == 'fill in the blank'){
                //show previous answer, unless it's a retry
                if (retry !== 1 || previous_correct == 1){
                    text_box_corr.text = instructions_loop.thisTrial['correct_answerP'];
                } else {
                    text_box_corr.text = '';
                }

                //move to a function 'updateTextBox'??
                //get size and x,y coordinates
                let text_box_size = ([Number(instructions_loop.thisTrial["textbox_size"][0]) * scale, Number(instructions_loop.thisTrial["textbox_size"][1]) * scale]);
                let Tcoords = [Number(instructions_loop.thisTrial["textbox_position"][0]) * scale, Number(instructions_loop.thisTrial["textbox_position"][1]) * scale];
                //translate to psychojs coords, adjust for the size of box
                let text_coords = [((-1 * screen_size[0]/2) + Tcoords[0]) + text_box_size[0]/2, (screen_size[1]/2 - Tcoords[1]) - text_box_size[1]/2];
                text_entry_box.setPos(text_coords);
                text_entry_box.setSize(text_box_size);
                text_entry_box.editable = false;
                text_entry_box.setAutoDraw(false);
                text_entry_box.setAutoDraw(true);
                text_entry_box.text = prev_text_box_answer;
                text_box_corr.setPos([text_coords[0] + text_box_size[0] + 50 * scale, text_coords[1]]);
                text_box_corr.setAutoDraw(false);
                text_box_corr.setAutoDraw(true);
            } else if (type_of_test == 'multiple selections'){
                    for (let click_box of Object.values(click_boxes)){
                        //make it green if it is correct unless it's a retry
                        if (instructions_loop.thisTrial['correct_answerP'].includes(click_box.name) && (retry !== 1 || previous_correct == 1)){
                            click_box.setFillColor([0,1,0]);
                        }
                        click_box.setAutoDraw(true);

                        for (let selection of previously_selected){
                            if (click_box == selection){
                               let selector_image = new visual.ImageStim({
                                    win: psychoJS.window,
                                    image: test_loop.thisTrial['selector_box_image'],
                                    pos: click_box.pos,
                                    size: [click_box.size[0]/2, click_box.size[1]/2],
                                    depth: -100
                                    });
                                selector_image.setAutoDraw(true);  // Show the feedback
                                selector_images.push(selector_image);  // Add to tracking array
                            }
                        }
                    }
            } else if (type_of_test == 'same different'){
                  already_set_up = true;

                  answerPositionPX = instructions_loop.thisTrial["answer_positionPX"];
                  answerPositionPY = instructions_loop.thisTrial["answer_positionPY"];

                  let choice_adjust = 0; //subtract an increasing integer to get the 'S' ans choice numbers
                  let choice_n = 1; //use a counter starting from 1 to name the answer choices

                  //loop through a range from 1 to length of answer choices
                  for (var x, _pj_c = 0, _pj_a = util.range(answerPositionPX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                      x = _pj_a[_pj_c];
                      Pcoords = [Number(answerPositionPX[x]) * scale, Number(answerPositionPY[x] * scale)];
                      Pcoords = [((-1 * screen_size[0]/2) + Pcoords[0]), (screen_size[1]/2 - Pcoords[1])];
                      //set the same or opposite ans boxes
                      if (choice_n % 2 !== 0){
                          s_or_o = 'S';
                          choice_number = choice_n - choice_adjust;
                      } else {
                          s_or_o = 'O';
                          choice_number = choice_n/2;
                      }
                      //add the coordinates to the Pans_boxes dictionary with item number and S or O as the key
                      Pans_boxes['Pans_box_' + choice_number.toString() + s_or_o] = Pcoords;
                      choice_n = choice_n + 1;
                      choice_adjust = choice_adjust + .5;
                  }
                  //check for prev answers
                  if (prev_SD_answers.length > 0){
                      SDcurrently_selected = prev_SD_answers;
                      prev_SD_answers = [];
                      for (let ans_box of SDcurrently_selected){
                          //check which ans choices were selected and draw selector box
                          let sel_size = instructions_loop.thisTrial['selector_sizeP'];
                          sel_size = [Number(sel_size[0]) * scale, Number(sel_size[1]) * scale]
                          let selector_image = new visual.ImageStim({
                              win: psychoJS.window,
                              image: test_loop.thisTrial['selector_box_image'],
                              pos: [Pans_boxes[ans_box][0] + sel_size[0]/2, Pans_boxes[ans_box][1] - sel_size[1]/2],
                              size: sel_size,
                              depth: -100,
                              name: 'sel' + ans_box
                          });
                          selector_image.setAutoDraw(true);  // Show the selector image
                          selector_images.push(selector_image);  // Add to tracking array
                      }
                  }
            }

            //if this is feedback, if the att check was correct, and this is att check
            if (prev_att_correct){
                if (instructions_loop.thisTrial["att_check"]){
                    previous_attempts = 0;
                    current_state = 'advance';
                    //reset this for multiple att checks
                    prev_att_correct = false;
                }
            }

            if (previous_correct == 1){
                inst_feedback_text.text = "You were correct!";
                if (retry > 0){ //if this is a retry problem, skip to green highlight
                    item_stim.setImage((stim_folder + "/") + inst_page_string.replace('.png', '2.png'));
                    item_stim.size = [1920 * scale, 1080 * scale];
                    practice_retry = false;
                }
                //set prev correct back to 0 for multiple practice items
                //previous_correct = 0;
            //practice item wrong and retry
            } else if (retry > 0){
                if (retry_count < retry){
                    //repeat practice trial
                    console.log('repeat the trial');
                    inst_feedback_text.text = "You were incorrect. Try again.";
                    retry_count++;
                    practice_retry = true;
                } else {
                    //skip to feedback with green box image
                    inst_feedback_text.text = "You were incorrect. The correct answer is highlighted in green.";
                    item_stim.setImage((stim_folder + "/") + inst_page_string.replace('.csv', '2.csv'));
                    item_stim.size = [1920 * scale, 1080 * scale];
                    practice_retry = false;
                }
            //if practice item wrong and att check
            } else if (instructions_loop.thisTrial["att_check"] == 0){
                inst_feedback_text.text = "You were incorrect. The correct answer is highlighted in green.";
            } else if (previous_attempts == 0){
                inst_feedback_text.text = "You were incorrect. The correct answer is highlighted in green. Please reread the instructions and try again. Make sure you select the correct answer this time or you will not be able to participate in this study.";
                current_state = 'repeat';
                instructions_loop.finished = true;
            } else {
                inst_feedback_text.text = "You were incorrect. Unfortunately you will not be able to participate in this study."
                current_state = 'quit';
                instructions_loop.finished = true;
            }



        console.log('retry');
        console.log(retry);

        //else not feedback
        } else {
            inst_feedback_text.text = '';
        }

        console.log('practice retry');
        console.log(practice_retry);
        if (practice_retry == false){
            if (retry == -1){
                console.log('cont rout false');
                //skip the practice retry
                continueRoutine = false;
            }
        }

        /////////////////////////////
        // practice item

        previous_correct = 0;


        if (instructions_loop.thisTrial["practice_item"]) {
            if ((type_of_test === "multiple choice")) {
                if (already_set_up == false){
                    answerPositionPX = instructions_loop.thisTrial["answer_positionPX"];
                    answerPositionPY = instructions_loop.thisTrial["answer_positionPY"];

                    for (var i, _pj_c = 0, _pj_a = util.range(answerPositionPX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        let i = _pj_a[_pj_c];
                        let l = Pletters[i];
                        Pcoords = [Number(answerPositionPX[i]) * scale, Number(answerPositionPY[i]) * scale];
                        Pcoords = [((-1 * screen_size[0]/2) + Pcoords[0]), (screen_size[1]/2 - Pcoords[1])];

                        Pans_boxes['Pans_box_' + l] = Pcoords;
                    }

                    selector_box.setPos([-2000 * scale, 0]);
                    selector_size = [Number(instructions_loop.thisTrial["selector_sizeP"][0]) * scale, Number(instructions_loop.thisTrial["selector_sizeP"][1]) * scale];
                    selector_box.setSize(selector_size);
                    selector_box.setAutoDraw(false);

                }
            } else if ((type_of_test === "fill in the blank")) {
                //get size and x,y coordinates
                let text_box_size = ([Number(instructions_loop.thisTrial["textbox_size"][0]) * scale, Number(instructions_loop.thisTrial["textbox_size"][1]) * scale]);
                let Tcoords = [Number(instructions_loop.thisTrial["textbox_position"][0]) * scale, Number(instructions_loop.thisTrial["textbox_position"][1]) * scale];
                //translate to psychojs coords, adjust for the size of box
                let text_coords = [((-1 * screen_size[0]/2) + Tcoords[0]) + text_box_size[0]/2, (screen_size[1]/2 - Tcoords[1]) - text_box_size[1]/2];
                text_entry_box.setPos(text_coords);
                text_entry_box.setSize(text_box_size);
                text_entry_box.editable = true;
                text_entry_box.setAutoDraw(false);
                text_entry_box.setAutoDraw(true);

            } else if ((type_of_test === "multiple selections")) {

                answerPositionPX = instructions_loop.thisTrial['answer_positionPX'];
                answerPositionPY = instructions_loop.thisTrial['answer_positionPY'];

                for (var i, _pj_c = 0, _pj_a = util.range(answerPositionPX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    sel_size = [Number(instructions_loop.thisTrial["selector_sizeP"][0]) * scale, Number(instructions_loop.thisTrial["selector_sizeP"][1]) * scale];
                    let Pcoords = [Number(answerPositionPX[i]) * scale, Number(answerPositionPY[i]) * scale];
                    Pcoords = [((-1 * screen_size[0]/2) + Pcoords[0] + sel_size[0]/2), ((screen_size[1]/2) - Pcoords[1] - sel_size[1]/2)];
                    click_boxes["click_box" + i.toString()].setPos(Pcoords);
                    click_boxes["click_box" + i.toString()].setSize([sel_size[0] * 2, sel_size[1] * 2]);
                    click_boxes["click_box" + i.toString()].setFillColor(new util.Color([1,1,1]));
                    click_boxes["click_box" + i.toString()].setAutoDraw(false);
                    click_boxes["click_box" + i.toString()].setAutoDraw(true);
                }

                currently_selected = [];
            } else if (type_of_test == 'same different'){
                if (already_set_up == false){
                    answerPositionPX = instructions_loop.thisTrial["answer_positionPX"];
                    answerPositionPY = instructions_loop.thisTrial["answer_positionPY"];

                    let choice_adjust = 0; //subtract an increasing integer to get the 'S' ans choice numbers
                    let choice_n = 1;

                    for (var x, _pj_c = 0, _pj_a = util.range(answerPositionPX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        x = _pj_a[_pj_c];
                        Pcoords = [Number(answerPositionPX[x]) * scale, Number(answerPositionPY[x] * scale)];
                        Pcoords = [((-1 * screen_size[0]/2) + Pcoords[0]), (screen_size[1]/2 - Pcoords[1])];
                        //set the same or opposite ans boxes
                        if (choice_n % 2 !== 0){
                            s_or_o = 'S';
                            choice_number = choice_n - choice_adjust;
                        } else {
                            s_or_o = 'O';
                            choice_number = choice_n/2;
                        }
                        //add the coordinates to the Pans_boxes dictionary with item number and S or O as the key
                        Pans_boxes['Pans_box_' + choice_number.toString() + s_or_o] = Pcoords;
                        choice_n = choice_n + 1;
                        choice_adjust = choice_adjust + .5;
                    }
                }
            }
        }

        mouse_down = false;
      Begin Routine:
        item_stim.image = stim_folder + '/' + instructions_loop.thisTrial["instructions_page"]

        ans_boxes = {}
        letters = ('A', 'B', 'C', 'D', 'E', 'F', 'G', 'H')
        currently_selected = []
        answerPositionX = None
        answerPositionY = None

        if instructions_loop.thisTrial['practice_item']:

            if type_of_test == 'multiple choice':

                answerPositionX = instructions_loop.thisTrial['answer_positionPX']
                answerPositionY = instructions_loop.thisTrial['answer_positionPY']

                for i in range(len(answerPositionPX)):
                    l = letters[i]
                    coords = (answerPositionX[i] * scale, answerPositionY[i] * scale)
                    coords = (-1 * screen_size[0]/2 * scale + coords[0], screen_size[1]/2 * scale - coords[1])
                    ans_boxes[f'ans_box_{l}'] = coords


                selector_box.pos = [-2000 * scale, 0]
                selector_box.size = [instructions_loop.thisTrial['selector_sizeP'][0] * scale, instructions_loop.thisTrial['selector_sizeP'][1] * scale]



            elif type_of_test == 'fill in the blank':
                text_entry_box.setPos([instructions_loop.thisTrial["textbox_pos"][0] * scale, instructions_loop.thisTrial["textbox_pos"][1] * scale])
                text_entry_box.setSize([float(instructions_loop.thisTrial["textbox_size"][0] * scale), float(instructions_loop.thisTrial["textbox_size"][1]) * scale])
                text_entry_box.editable = True

            elif type_of_test == 'multiple selection':
                answerPositionPX = instructions_loop.thisTrial['answer_positionPX']
                answerPositionPY = instructions_loop.thisTrial['answer_positionPY']

                for i in range(len(answerPositionPX)):
                    Pcoords = [answerPositionPX[i] * scale, answerPositionPY[i] * scale]
                    Pcoords = [((-1 * screen_size[0]/2) + Pcoords[0]), ((screen_size[1]/2) - Pcoords[1])]
                    click_boxes["click_box" + str(i)].setPos(Pcoords)
                    click_boxes["click_box" + str(i)].setSize([instructions_loop.thisTrial["selector_sizeP"][0] * scale, instructions_loop.thisTrial["selector_sizeP"][1] * scale])
                    click_boxes["click_box" + str(i)].setFillColor([1,1,1])



        mouse_down = False
      Each Frame:
        if instructions_loop.thisTrial['practice_item']:
            if type_of_test == 'multiple choice':

                selector_sizeP = instructions_loop.thisTrial['selector_sizeP']

                if mouse.getPressed()[0] and not mouse_down:
                    mouse_pos = mouse.getPos()

                    for ans_box in ans_boxes.values():
                        top_bound = ans_box[1]
                        bottom_bound = ans_box[1] - selector_box.size[1]
                        left_bound = ans_box[0]
                        right_bound = ans_box[0] + selector_box.size[0]

                        if mouse_pos[1] <= top_bound and mouse_pos[1] >= bottom_bound and mouse_pos[0] >= left_bound and mouse_pos[0] <= right_bound:
                            for box in ans_boxes.items():
                                if box[1] == ans_box:
                                    clicked_stim = box[0]
                            if clicked_stim == currently_selected:
                                currently_selected = None
                                selector_box.pos = (-2000 * scale, 0)
                            else:
                                selector_box.pos = (ans_box[0] + selector_box.size[0]/2, ans_box[1] - selector_box.size[1]/2)
                                currently_selected = clicked_stim

                    mouse_down = True

                if not mouse.getPressed()[0]:
                    mouse_down = False

            elif type_of_test == 'multiple selections':
                if mouse.getPressed()[0] and not mouse_down:
                    mouse_pos = mouse.getPos()

                    for click_box in click_boxes.values():
                        if mouse.isPressedIn(click_box):
                            if click_box in currently_selected:
                                currently_selected.remove(click_box)
                                click_box.fillColor = 'white'
                            else:
                                currently_selected.append(click_box)
                                click_box.fillColor = 'black'

                    mouse_down = True

                if not mouse.getPressed()[0]:
                    mouse_down = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        if (instructions_loop.thisTrial["practice_item"]) {
            if ((type_of_test === "multiple choice")) {
                if ((mouse.getPressed()[0] && (! mouse_down))) {
                    mouse_pos = mouse.getPos();
                    for (let Pans_box, _pj_c = 0, _pj_a = Object.values(Pans_boxes), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        Pans_box = _pj_a[_pj_c];
                        let Ptop_bound = Pans_box[1];
                        let Pbottom_bound = (Pans_box[1] - selector_box.size[1]);
                        let Pleft_bound = Pans_box[0];
                        let Pright_bound = (Pans_box[0] + selector_box.size[0]);

                        if (((((mouse_pos[1] <= Ptop_bound) && (mouse_pos[1] >= Pbottom_bound)) && (mouse_pos[0] >= Pleft_bound)) && (mouse_pos[0] <= Pright_bound))) {
                            for (let Pbox, _pj_f = 0, _pj_d = Object.entries(Pans_boxes), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                                Pbox = _pj_d[_pj_f];
                                if ((Pbox[1] == Pans_box)) {
                                    Pclicked_stim = Pbox[0];
                                }
                            }
                            if (Pclicked_stim == Pcurrently_selected) {
                                Pcurrently_selected = [];
                                selector_box.setPos([-2000 * scale, 0]);
                                selector_box.setAutoDraw(false);
                                selector_box.setAutoDraw(true);
                            } else {
                                selector_box.setPos([(Pans_box[0] + (selector_box.size[0] / 2)), (Pans_box[1] - (selector_box.size[1] / 2))]);
                                Pcurrently_selected = Pclicked_stim;
                                selector_box.setAutoDraw(false);
                                selector_box.setAutoDraw(true);
                            }

                        }
                    }
                    mouse_down = true;
                }

                if ((! mouse.getPressed()[0])) {
                    mouse_down = false;
                }

            } else if ((type_of_test === "multiple selections")) {
                if ((mouse.getPressed()[0] && (! mouse_down))) {
                    mouse_pos = mouse.getPos();
                    mouse_down = true;
                    for (var click_box, _pj_c = 0, _pj_a = Object.values(click_boxes), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        click_box = _pj_a[_pj_c];
                        if (mouse.isPressedIn(click_box)) {
                            if (_pj.in_es6(click_box, currently_selected)) {
                                const box_index = currently_selected.indexOf(click_box);
                                if (box_index > -1) {
                                    currently_selected.splice(box_index, 1);
                                }
                                //click_box.setFillColor(new util.Color([1,1,1]));
                                for (let selector_image of selector_images) {
                                    if (selector_image.pos[0] == click_box.pos[0] && selector_image.pos[1] == click_box.pos[1]){
                                        selector_image.setAutoDraw(false);  // Hide the feedback image
                                    }
                                }
                            } else {
                                currently_selected.push(click_box);
                                //click_box.setFillColor(new util.Color([0,0,0]));
                                let selector_exists = false;
                                //create a selector image at the clicked box
                                for (let selector_image of selector_images){
                                    if (selector_image.pos[0] == click_box.pos[0] && selector_image.pos[1] == click_box.pos[1]){
                                        selector_image.setAutoDraw(true);
                                        selector_exists = true;
                                    }
                                }
                                if (selector_exists == false){
                                    let selector_image = new visual.ImageStim({
                                        win: psychoJS.window,
                                        image: test_loop.thisTrial['selector_box_image'],
                                        pos: click_box.pos,
                                        size: [click_box.size[0]/2, click_box.size[1]/2],
                                        depth: -100
                                        });
                                    selector_image.setAutoDraw(true);  // Show the feedback
                                    selector_images.push(selector_image);  // Add to tracking array
                                }
                            }
                        }
                    }
                }
                if ((! mouse.getPressed()[0])) {
                    mouse_down = false;
                }
            } else if (type_of_test == 'fill in the blank'){
                        //text_entry_box.setPos([instructions_loop.thisTrial["textbox_position"][0] * scale, instructions_loop.thisTrial["textbox_position"][1] * scale]);
                        //text_entry_box.setSize([Number(instructions_loop.thisTrial["textbox_size"][0]) * scale, Number(instructions_loop.thisTrial["textbox_size"][1]) * scale]);

            } else if ((type_of_test === "same different")) {
                if ((mouse.getPressed()[0] && (! mouse_down))) { //if mouse was clicked but not held down
                    mouse_pos = mouse.getPos();
                    mouse_down = true;
                    //loop through all answer box locations
                    for (let Pans_box of Object.values(Pans_boxes)) {
                        let sel_size = instructions_loop.thisTrial['selector_sizeP'] //get size of selector image
                        sel_size = [Number(sel_size[0]) * scale, Number(sel_size[1]) * scale];
                        let Ptop_bound = Pans_box[1];
                        let Pbottom_bound = (Pans_box[1] - sel_size[1]);
                        let Pleft_bound = Pans_box[0];
                        let Pright_bound = (Pans_box[0] + sel_size[0]);
                        //check if each answer box was just clicked on
                        if (((((mouse_pos[1] <= Ptop_bound) && (mouse_pos[1] >= Pbottom_bound)) && (mouse_pos[0] >= Pleft_bound)) && (mouse_pos[0] <= Pright_bound))) {
                            for (let Pbox, _pj_f = 0, _pj_d = Object.entries(Pans_boxes), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                                Pbox = _pj_d[_pj_f];
                                if ((Pbox[1] == Pans_box)) {
                                    //set it to Pclicked_stim if it was
                                    Pclicked_stim = Pbox[0];
                                }
                            }
                            //check if the clicked answer box was already selected
                            if (SDcurrently_selected.includes(Pclicked_stim)) {
                               for (let selector_image of selector_images){
                                   if (selector_image.name == 'sel' + Pclicked_stim){
                                       //make it invisible if it was already clicked
                                       selector_image.setAutoDraw(false);
                                   }
                               }
                               //remove it from list of currently selected answer boxes
                               const box_index = SDcurrently_selected.indexOf(Pclicked_stim);
                               if (box_index > -1) {
                                   SDcurrently_selected.splice(box_index, 1);
                               }
                           //if the clicked answer box wasn't already selected
                            } else {
                                let selector_exists = false; //check if selector image already drawn
                                for (let selector_image of selector_images){
                                    if (selector_image.name == 'sel' + Pclicked_stim){
                                        selector_exists = true; //if selector image for current ans choice is already in selector_images list
                                        selector_image.setAutoDraw(true);
                                    }
                                }
                                //if selector image wasn't already drawn, draw it
                                if (selector_exists == false){
                                    let sel_size = instructions_loop.thisTrial['selector_sizeP'];
                                    sel_size = [Number(sel_size[0]) * scale, Number(sel_size[1]) * scale]
                                    let selector_image = new visual.ImageStim({
                                        win: psychoJS.window,
                                        image: test_loop.thisTrial['selector_box_image'],
                                        pos: [Pans_boxes[Pclicked_stim][0] + sel_size[0]/2, Pans_boxes[Pclicked_stim][1] - sel_size[1]/2],
                                        size: sel_size,
                                        depth: -100,
                                        name: 'sel' + Pclicked_stim
                                        });
                                    selector_image.setAutoDraw(true);  // Show the selector image
                                    selector_images.push(selector_image);  // Add to tracking array
                                }
                                //check if S or O of same number was selected
                                let s_o = Pclicked_stim.slice(-1);
                                let remove_name;
                                if (s_o == 'S'){
                                    remove_name = Pclicked_stim.slice(0,-1) + 'O';
                                } else {
                                    remove_name = Pclicked_stim.slice(0,-1) + 'S';
                                }

                                let index = SDcurrently_selected.findIndex(item => item == remove_name);
                                if (index > -1){
                                    //if the other choice is selected, unselect it
                                    SDcurrently_selected.splice(index, 1);
                                    //find corresponing selector image and make it invisible
                                    for (let selector_image of selector_images){
                                        if (selector_image.name == 'sel' + remove_name){
                                            selector_image.setAutoDraw(false);
                                        }
                                    }
                                }
                                //add the clicked answer box to list of currently selected
                                SDcurrently_selected.push(Pclicked_stim);
                            }
                        }
                    }
                }
                if ((! mouse.getPressed()[0])) {
                    mouse_down = false;
                }
            }

        } //if practice item
      End JS Routine:
        prev_SD_answers = [];

        if (instructions_loop.thisTrial['att_check']){
            previous_attempts = previous_attempts + 1;
        }

        if (instructions_loop.thisTrial['practice_item']){
            if ((type_of_test === "multiple choice")) {
                if (Pcurrently_selected.length > 0) {
                    instructions_loop.addData("Pselected_answer", Pcurrently_selected);
                    if ((Pcurrently_selected == instructions_loop.thisTrial["correct_answerP"])) {
                        instructions_loop.addData("Ppoints", 1);
                        if (instructions_loop.thisTrial['att_check']){
                            prev_att_correct = true;
                        }
                        previous_correct = 1;
                        console.log('correct');
                        //test_score += 1;
                    } else {
                        instructions_loop.addData("Ppoints", 0);
                    }

                    let ans_box_keys = Object.keys(Pans_boxes);
                    prev_ans_index = ans_box_keys.indexOf(Pcurrently_selected);
                } else {
                    instructions_loop.addData("Pselected_answer", "no selection");
                    instructions_loop.addData("Ppoints", 0);
                    prev_ans_index = "None";
                }


            }

            else if (type_of_test == "multiple selections"){
                Pms_corr = 0;
                Pms_incorr = 0;
                Pms_points = 0;
                let Pselected_answer_list = [];
                if (currently_selected.length){
                    for (let i = 0; i < currently_selected.length; i += 1){
                        Pselected_answer_list.push(currently_selected[i].name);
                        if (instructions_loop.thisTrial["correct_answerP"].includes(currently_selected[i].name)){
                            //selected a correct answer
                            Pms_corr += 1
                            } else {
                                //selected an incorrect answer
                                Pms_incorr += 1
                            }
                        }

                    if (Pms_corr == 2 && Pms_incorr == 0) {
                        //practice item correct
                        previous_correct = 1;
                        Pms_points = 1;
                        //if attention check, then set this var too
                        if (instructions_loop.thisTrial['att_check']){
                            prev_att_correct = true;
                        }
                    } else {
                        //practice item incorrect
                        Pms_points = 0;
                        }
                }
                instructions_loop.addData('Pselected_answer', Pselected_answer_list);
                instructions_loop.addData("Ppoints", Pms_points);
                instructions_loop.addData("Pcorrect", Pms_corr);
                instructions_loop.addData("Pincorrect", Pms_incorr);

                previously_selected = currently_selected;
                for (let selector_image of selector_images){
                    selector_image.setAutoDraw(false);
                }
                selector_images = [];
                for (let click_box of Object.values(click_boxes)){
                    click_box.setAutoDraw(false);
                }
            }


            else if (type_of_test === "fill in the blank") {
                // Get the entered text from the text entry box
                let entered_text = text_entry_box.text;

                // Remove new line characters
                let no_return_text = entered_text.replace(/\n/g, "").replace(/\r/g, "");

                // Filter out non-alphanumeric characters and convert to lower case
                let clean_text = no_return_text.replace(/[^a-z0-9.]/gi, '');  // Keeps only alphanumeric characters
                clean_text = clean_text.toUpperCase();

                // Log the cleaned text to the item loop
                instructions_loop.addData("Pselected_answer", );
                if (clean_text !== ''){
                    instructions_loop.addData("Pselected_answer", clean_text);
                } else {
                    instructions_loop.addData("Pselected_answer", "no selection");
                }

                // Check if the cleaned text matches the correct answer
                if (clean_text === instructions_loop.thisTrial["correct_answerP"]) {
                    instructions_loop.addData("Ppoints", 1);
                    previous_correct = 1;
                    //if correct and att check
                    if (instructions_loop.thisTrial['att_check']){
                        prev_att_correct = true;
                    }
                } else {
                    instructions_loop.addData("Ppoints", 0);
                }

                prev_text_box_answer = no_return_text;
                text_entry_box.setText('');

            } else if (type_of_test == 'same different'){
                let Psd = 0;
                //score their P answers
                let corr_ans = instructions_loop.thisTrial['correct_answerP'];
                let sd_corr = 0;
                let sd_incorr = 0;
                let sd_item_score = 0;
                let perf_points = 0;
                for (let ans_box of SDcurrently_selected){
                    if (corr_ans.includes(ans_box)){
                        sd_corr++;
                    } else {
                        sd_incorr--;
                    }
                }
                sd_item_score = sd_corr + sd_incorr;
                if (sd_item_score == 6){
                    perf_points++;
                    previous_correct = 1;
                }
                //record submitted answer, points
                instructions_loop.addData("Pselected_answer", SDcurrently_selected);
                instructions_loop.addData("Ppoints", perf_points);
                instructions_loop.addData("Pcorrect", sd_corr);
                instructions_loop.addData("Pincorrect", sd_incorr);
                //store their answers for feedback
                prev_SD_answers = SDcurrently_selected;
                SDcurrently_selected = [];
                for (let selector_image of selector_images){
                    selector_image.setAutoDraw(false);
                    selector_images = [];
                }
            }
        } else { // if not practice item, check feedback
            if (instructions_loop.thisTrial['feedback']){
                if (type_of_test == 'multiple selections'){
                    //clear selector images
                    for (let selector_image of selector_images){
                        selector_image.setAutoDraw(false);
                    }
                    selector_images = [];
                    for (let click_box of Object.values(click_boxes)){
                        click_box.setAutoDraw(false);
                    }
                } else if (type_of_test == 'same different'){
                    //clear the selector images
                    for (let selector_image of selector_images){
                        selector_image.setAutoDraw(false);
                    }
                    selector_images = [];
                }
            }
        }


        if (current_state == 'quit'){
            psychoJS.quit()
        }
      End Routine:
        if instructions_loop.thisTrial['practice_item']:
            if type_of_test == 'multiple choice':
                if currently_selected:
                    instructions_loop.addData('Pselected_answer', currently_selected)
                    if currently_selected == instructions_loop.thisTrial['correct_answerP']:
                        instructions_loop.addData('Pcorrect', 1)
                    else:
                        instructions_loop.addData('Pcorrect', 0)
                else:
                    instructions_loop.addData('Pselected_answer', 'no selection')
                    instructions_loop.addData('Pcorrect', 0)

            elif type_of_test == 'fill in the blank':
                entered_text = text_entry_box.text
                clean_text = entered_text.replace('\n', '').replace('\r', '')
                clean_text = ''.join(filter(str.isalnum, clean_text))
                clean_text = clean_text.lower()

                instructions_loop.addData('PEnteredText', clean_text)
                if clean_text == instructions_loop.thisTrial['correct_answerP']:
                    instructions_loop.addData('Pcorrect', 1)
                else:
                    instructions_loop.addData('Pcorrect', 0)

            elif type_of_test == "multiple selections":
                ms_corr = 0
                if len(currently_selected):
                    for i in range(len(currently_selected)):
                        item_loop.addData('Pselected_answer', currently_selected[i].name)
                        if currently_selected[i].name in item_loop.thisTrial["correct_answerP"]:
                            ms_corr += 1
                        else:
                            ms_corr -= 1


                    item_loop.addData("Pcorrect", ms_corr)
                    if ms_corr == 2:
                        test_score += 1
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent inst_feedback_text
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
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    TextComponent text_box_corr
      color = -1.0000, 0.7647, -1.0000
      letterHeight = 40
      startVal [time (s)] = 0.0
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  Routine item
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    CodeComponent item_code1
      Code Type = Both
      Begin JS Routine:
        // Shuffle the trial order if using an existing trial handler
        function shuffle(array) {
            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array;
        }

        if (test_loop.thisTrial['randomize'] == 1 && shuffled_trials == false){
            shuffle(item_loop.trialList)
            shuffled_trials = true;
            //force thisTrial to update
            item_loop.thisTrial = item_loop.trialList[0];
        }




        if ('type_of_item' in item_loop.trialList[0]){
            type_of_test = item_loop.thisTrial['type_of_item'];
            selector_box.setImage(test_loop.thisTrial['selector_box_image']);
            selector_box.setAutoDraw(false);
            if (Object.values(click_boxes)){
                for (let box of Object.values(click_boxes)){
                    box.setAutoDraw(false);
                }
            }
            text_entry_box.setAutoDraw(false);

            if (type_of_test == 'multiple selections'){
                click_boxes = {};
                for (var i, _pj_c = 0, _pj_a = util.range(item_loop.thisTrial['answer_positionX'].length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    click_boxes[("click_box" + i.toString())] = new visual.Rect({
                                                                                 win: psychoJS.window,                                                                     name: "Rclick_box" + i.toString(),
                                                                                 //edges: 4,
                                                                                 size: [200 * scale, 200 * scale],
                                                                                 pos: [0, 0],
                                                                                 lineColor: new util.Color([-1,-1,-1]),
                                                                                 fillColor: new util.Color([1,1,1]),
                                                                                 lineWidth: 5 * scale,
                                                                                 units: 'pix',        // Specify units
                                                                                 opacity: 1.0,       // Fully opaque
                                                                                 depth: -100,           // Default depth
                                                                                 autoDraw: true,       // Draw automatically
                                                                                 colorSpace: "rgb"
                                                                                 });
                }
            }
        }

        //set selector image if needed
        //if ('selector_box_image' in item_loop.trialList[0]){
        //    selector_box.setImage(item_loop.thisTrial['selector_box_image']);
        //}

        image_path = stim_folder + "/" + item_loop.thisTrial["standard_stim"];
        item_stim.setImage(image_path);
        item_stim.setSize([1920 * scale, 1080 * scale]);
        item_stim.setPos([0,0]);

        ans_boxes = {};
        letters = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J"];
        currently_selected = null;
        clicked_stim = null;
        sel_size = 0;
        selector_images = [];
        SDcurrently_selected = [];
        s_or_o = 'S';
        choice_number = 0;

        if ((type_of_test === "multiple choice")) {
            let answerPositionX = item_loop.thisTrial["answer_positionX"];
            let answerPositionY = item_loop.thisTrial["answer_positionY"];

            for (var i, _pj_c = 0, _pj_a = util.range(answerPositionX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                let i = _pj_a[_pj_c];
                let l = letters[i];
                let coords = [Number(answerPositionX[i]) * scale, Number(answerPositionY[i]) * scale];
                coords = [((-1 * screen_size[0]/2) + coords[0]), ((screen_size[1]/2) - coords[1])];
                ans_boxes['ans_box_' + l.toString()] = coords;

            }
            selector_box.setPos([-2000 * scale, 0]);
            selector_size = [Number(item_loop.thisTrial["selector_size"][0]) * scale, Number(item_loop.thisTrial["selector_size"][1]) * scale];
            selector_box.setSize(selector_size);
            selector_box.setAutoDraw(false);
            selector_box.setAutoDraw(true);

        }
        if ((type_of_test === "multiple selections")) {
            console.log('mult selec');
            let answerPositionX = item_loop.thisTrial['answer_positionX'];
            let answerPositionY = item_loop.thisTrial['answer_positionY'];

            for (var i, _pj_c = 0, _pj_a = util.range(answerPositionX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                sel_size = [Number(item_loop.thisTrial["selector_size"][0]) * scale, Number(item_loop.thisTrial["selector_size"][1]) * scale];
                coords = [Number(answerPositionX[i]) * scale, Number(answerPositionY[i]) * scale];
                coords = [((-1 * screen_size[0]/2) + coords[0] + sel_size[0]/2), ((screen_size[1]/2) - coords[1] - sel_size[1]/2)];
                click_boxes["click_box" + i.toString()].setPos(coords);
                click_boxes["click_box" + i.toString()].setSize([sel_size[0] * 2, sel_size[1] * 2]);
                click_boxes["click_box" + i.toString()].setFillColor(new util.Color([1,1,1]));
                click_boxes["click_box" + i.toString()].setAutoDraw(false);
                click_boxes["click_box" + i.toString()].setAutoDraw(true);
            }

            currently_selected = [];
        }
        if ((type_of_test === "fill in the blank")) {
                console.log('fill blank');
                text_entry_box.setPos([item_loop.thisTrial["textbox_position"][0] * scale, item_loop.thisTrial["textbox_position"][1] * scale]);
                text_entry_box.setSize([Number(item_loop.thisTrial["textbox_size"][0]) * scale, Number(item_loop.thisTrial["textbox_size"][1]) * scale]);
                text_entry_box.editable = true;
                text_entry_box.text = '';
                text_entry_box.autofocus = false;
                text_entry_box.autofocus = true;
                text_entry_box.setAutoDraw(false);
                text_entry_box.setAutoDraw(true);
        }
        if (type_of_test == "same different"){
            answerPositionX = item_loop.thisTrial["answer_positionX"];
            answerPositionY = item_loop.thisTrial["answer_positionY"];

            let choice_adjust = 0; //subtract an increasing integer to get the 'S' ans choice numbers
            let choice_n = 1;

            for (var x, _pj_c = 0, _pj_a = util.range(answerPositionX.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                x = _pj_a[_pj_c];
                coords = [Number(answerPositionX[x]) * scale, Number(answerPositionY[x] * scale)];
                coords = [((-1 * screen_size[0]/2) + coords[0]), (screen_size[1]/2 - coords[1])];
                //set the same or opposite ans boxes
                if (choice_n % 2 !== 0){
                    s_or_o = 'S';
                    choice_number = choice_n - choice_adjust;
                } else {
                    s_or_o = 'O';
                    choice_number = choice_n/2;
                }
                //add the coordinates to the Pans_boxes dictionary with item number and S or O as the key
                ans_boxes['ans_box_' + choice_number.toString() + s_or_o] = coords;
                choice_n = choice_n + 1;
                choice_adjust = choice_adjust + .5;
            }
        }

        mouse_down = false;
        if ((! score_dict_set)) {
            //score_dict[name_of_test]["prev_scores"] = item_loop.thisTrial["prev_scores"];
            score_dict[name_of_test]["possible"] = item_loop.nTotal;
            score_dict_set = true;
        }

        //'press Enter text'
        key_inst_text.setColor([.7, .7, .7]);
        key_inst_text.setPos([0, -520 * scale]);
        key_inst_text.wrapWidth = 1800 * scale;
        key_inst_text.height = 35 * scale;
        key_inst_text.setAutoDraw(false);
        key_inst_text.setAutoDraw(true);

        if (name_of_test == 'AC1' || name_of_test == 'AC2'){
            continueRoutine = false;
        }

        trialClock.reset();

        if (item_loop.thisN === 0){
            testClock.reset();
        }
      Begin Routine:
        trialClock.reset()

        item_stim.image = stim_folder + '/' + item_loop.thisTrial["standard_stim"]

        ans_boxes = {}
        letters = ('A', 'B', 'C', 'D', 'E', 'F', 'G', 'H')

        if type_of_test == 'multiple choice':
            for i in range(len(answerPositionX)):
                l = letters[i]
                answerPositionX = item_loop.thisTrial['answer_positionX'][i]
                answerPositionY = item_loop.thisTrial['answer_positionY'][i]
                coords = (answerPositionX * scale, answerPositionY * scale)
                coords = ((-1 * screen_size[0]/2) + coords[0], (screen_size[1]/2) - coords[1])
                ans_boxes[f'ans_box_{l}'] = coords

            selector_box.pos = [-2000 * scale, 0]
            selector_box.size = [item_loop.thisTrial['selector_size'][0] * scale, item_loop.thisTrial['selector_size'][1] * scale]

            currently_selected = []

        if type_of_test == 'multiple selections':
            answerPositionX = item_loop.thisTrial['answer_positionX']
            answerPositionY = item_loop.thisTrial['answer_positionY']

            for i in range(len(answerPositionX)):
                coords = (answerPositionX[i] * scale, answerPositionY[i] * scale)
                coords = ((-1 * screen_size[0]/2) + coords[0], (screen_size[1]/2) - coords[1])
                click_boxes[f'click_box{i}'].pos = coords
                click_boxes[f'click_box{i}'].size = [item_loop.thisTrial['selector_size'][0] * scale, item_loop.thisTrial['selector_size'][1] * scale]
                click_boxes[f'click_box{i}'].fillColor = 'white'
            currently_selected = []

        elif type_of_test == 'fill in the blank':
            text_entry_box.pos = [item_loop.thisTrial['textbox_position'][0] * scale, item_loop.thisTrial['textbox_position'][1] * scale]
            text_entry_box.size = [item_loop.thisTrial['textbox_size'][0] * scale, item_loop.thisTrial['textbox_size'][1] * scale]
            text_entry_box.editable = True

        mouse_down = False

        if not score_dict_set:
            score_dict[name_of_test]['prev_scores'] = item_loop.thisTrial['prev_scores']
            score_dict[name_of_test]['possible'] = item_loop.nTotal
            score_dict_set = True

        key_inst_text.color = [.7, .7, .7]
        key_inst_text.pos = [0, -400 * scale]
        key_inst_text.height = 35 * scale
      Each Frame:
        if type_of_test == 'multiple choice':
            if mouse.getPressed()[0] and not mouse_down:
                mouse_pos = mouse.getPos()

                for ans_box in ans_boxes.values():
                    top_bound = ans_box[1]
                    bottom_bound = ans_box[1] - selector_box.size[1]
                    left_bound = ans_box[0]
                    right_bound = ans_box[0] + selector_box.size[0]

                    if mouse_pos[1] <= top_bound and mouse_pos[1] >= bottom_bound and mouse_pos[0] >= left_bound and mouse_pos[0] <= right_bound:
                        for box in ans_boxes.items():
                            if box[1] == ans_box:
                                clicked_stim = box[0]
                        if clicked_stim == currently_selected:
                            currently_selected = None
                            selector_box.pos = (-2000 * scale, 0)
                        else:
                            selector_box.pos = (ans_box[0] + selector_box.size[0]/2, ans_box[1] - selector_box.size[1]/2)
                            currently_selected = clicked_stim

                mouse_down = True

            if not mouse.getPressed()[0]:
                mouse_down = False

        elif type_of_test == 'multiple selections':
            if mouse.getPressed()[0] and not mouse_down:
                mouse_pos = mouse.getPos()

                for click_box in click_boxes.values():
                    if mouse.isPressedIn(click_box):
                        if click_box in currently_selected:
                            currently_selected.remove(click_box)
                            click_box.fillColor = 'white'
                        else:
                            currently_selected.append(click_box)
                            click_box.fillColor = 'black'

                mouse_down = True

            if not mouse.getPressed()[0]:
                mouse_down = False

        #press enter text
        if trialClock.getTime() >= float(test_loop.thisTrial['time_min']):
            key_inst_text.color = [-1,-1,-1]

        if trialClock.getTime() >= test_loop.thisTrial["time_max"]:  # Check if 60 seconds have passed
            # Advance to the next trial
            trialClock.reset()
            continueRoutine = false # Move to the next item in the loop
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        if ((type_of_test === "multiple choice")) {
            if ((mouse.getPressed()[0] && (! mouse_down))) {
                mouse_pos = mouse.getPos();
                for (let ans_box, _pj_c = 0, _pj_a = Object.values(ans_boxes), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    ans_box = _pj_a[_pj_c];
                    let top_bound = ans_box[1];
                    let bottom_bound = ans_box[1] - Number(selector_box.size[1]);
                    let left_bound = ans_box[0];
                    let right_bound = ans_box[0] + Number(selector_box.size[0]);
                    if (((((mouse_pos[1] <= top_bound) && (mouse_pos[1] >= bottom_bound)) && (mouse_pos[0] >= left_bound)) && (mouse_pos[0] <= right_bound))) {
                        for (let box, _pj_f = 0, _pj_d = Object.entries(ans_boxes), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                            box = _pj_d[_pj_f];
                            if ((box[1] == ans_box)) {
                                clicked_stim = box[0];
                            }
                        }
                        if ((clicked_stim == currently_selected)) {
                            currently_selected = null;
                            selector_box.setPos([-2000 * scale, 0]);
                            selector_box.setAutoDraw(false);
                            selector_box.setAutoDraw(true);
                        } else {
                            selector_box.setPos([(ans_box[0] + (selector_box.size[0] / 2)), (ans_box[1] - (selector_box.size[1] / 2))]);
                            selector_box.setAutoDraw(false);
                            selector_box.setAutoDraw(true);
                            currently_selected = clicked_stim;
                        }
                    }
                }
                selector_box.setAutoDraw(false);
                selector_box.setAutoDraw(true);
                mouse_down = true;
            }
            if ((! mouse.getPressed()[0])) {
                mouse_down = false;
            }
        } else if ((type_of_test === "multiple selections")) {
                if ((mouse.getPressed()[0] && (! mouse_down))) {
                    mouse_pos = mouse.getPos();
                    for (var click_box, _pj_c = 0, _pj_a = Object.values(click_boxes), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        click_box = _pj_a[_pj_c];
                        if (mouse.isPressedIn(click_box)) {
                            if (_pj.in_es6(click_box, currently_selected)) {
                                const box_index = currently_selected.indexOf(click_box);
                                if (box_index > -1) {
                                currently_selected.splice(box_index, 1);
                                }
                                //click_box.setFillColor(new util.Color([1,1,1]));
                                for (let selector_image of selector_images) {
                                    if (selector_image.pos[0] == click_box.pos[0] && selector_image.pos[1] == click_box.pos[1]){
                                        selector_image.setAutoDraw(false);  // Hide the feedback image
                                    }
                                }
                            } else {
                                currently_selected.push(click_box);
                                //click_box.setFillColor(new util.Color([0,0,0]));
                                let selector_exists = false;
                                //create a selector image at the clicked box
                                for (let selector_image of selector_images){
                                    if (selector_image.pos[0] == click_box.pos[0] && selector_image.pos[1] == click_box.pos[1]){
                                        selector_image.setAutoDraw(true);
                                        selector_exists = true;
                                    }
                                }
                                if (selector_exists == false){
                                    let selector_image = new visual.ImageStim({
                                        win: psychoJS.window,
                                        image: test_loop.thisTrial['selector_box_image'],
                                        pos: click_box.pos,
                                        size: [click_box.size[0]/2, click_box.size[1]/2],
                                        depth: -100
                                        });
                                    console.log('click size');
                                    console.log(click_box.size);
                                    selector_image.setAutoDraw(true);  // Show the feedback
                                    selector_images.push(selector_image);  // Add to tracking array
                                }
                            }
                        }
                    }
                    mouse_down = true;
                }
                if ((! mouse.getPressed()[0])) {
                    mouse_down = false;
                }
        } else if (type_of_test == 'same different'){
                if ((mouse.getPressed()[0] && (! mouse_down))) { //if mouse was clicked but not held down
                    mouse_pos = mouse.getPos();
                    mouse_down = true;
                    //loop through all answer box locations
                    for (let ans_box of Object.values(ans_boxes)) {
                        let sel_size = item_loop.thisTrial['selector_size'] //get size of selector image
                        sel_size = [Number(sel_size[0]) * scale, Number(sel_size[1]) * scale];
                        let top_bound = ans_box[1];
                        let bottom_bound = (ans_box[1] - sel_size[1]);
                        let left_bound = ans_box[0];
                        let right_bound = (ans_box[0] + sel_size[0]);
                        //check if each answer box was just clicked on
                        if (((((mouse_pos[1] <= top_bound) && (mouse_pos[1] >= bottom_bound)) && (mouse_pos[0] >= left_bound)) && (mouse_pos[0] <= right_bound))) {
                            for (let box of Object.entries(ans_boxes)) {
                                if ((box[1] == ans_box)) {
                                    //set it to Pclicked_stim if it was
                                    clicked_stim = box[0];
                                }
                            }
                            //check if the clicked answer box was already selected
                            if (SDcurrently_selected.includes(clicked_stim)) {
                               for (let selector_image of selector_images){
                                   if (selector_image.name == 'sel' + clicked_stim){
                                       //make it invisible if it was already clicked
                                       selector_image.setAutoDraw(false);
                                   }
                               }
                               //remove it from list of currently selected answer boxes
                               const box_index = SDcurrently_selected.indexOf(clicked_stim);
                               if (box_index > -1) {
                                   SDcurrently_selected.splice(box_index, 1);
                               }
                           //if the clicked answer box wasn't already selected
                            } else {
                                let selector_exists = false; //check if selector image already drawn
                                for (let selector_image of selector_images){
                                    if (selector_image.name == 'sel' + clicked_stim){
                                        selector_exists = true; //if selector image for current ans choice is already in selector_images list
                                        selector_image.setAutoDraw(true);
                                    }
                                }
                                //if selector image wasn't already drawn, draw it
                                if (selector_exists == false){
                                    let sel_size = item_loop.thisTrial['selector_size'];
                                    sel_size = [Number(sel_size[0]) * scale, Number(sel_size[1]) * scale]
                                    let selector_image = new visual.ImageStim({
                                        win: psychoJS.window,
                                        image: test_loop.thisTrial['selector_box_image'],
                                        pos: [ans_boxes[clicked_stim][0] + sel_size[0]/2, ans_boxes[clicked_stim][1] - sel_size[1]/2],
                                        size: sel_size,
                                        depth: -100,
                                        name: 'sel' + clicked_stim
                                        });
                                    selector_image.setAutoDraw(true);  // Show the selector image
                                    selector_images.push(selector_image);  // Add to tracking array
                                }
                                //check if S or O of same number was selected
                                let s_o = clicked_stim.slice(-1);
                                let remove_name;
                                if (s_o == 'S'){
                                    remove_name = clicked_stim.slice(0,-1) + 'O';
                                } else {
                                    remove_name = clicked_stim.slice(0,-1) + 'S';
                                }

                                let index = SDcurrently_selected.findIndex(item => item == remove_name);
                                if (index > -1){
                                    //if the other choice is selected, unselect it
                                    SDcurrently_selected.splice(index, 1);
                                    //find corresponing selector image and make it invisible
                                    for (let selector_image of selector_images){
                                        if (selector_image.name == 'sel' + remove_name){
                                            selector_image.setAutoDraw(false);
                                        }
                                    }
                                }
                                //add the clicked answer box to list of currently selected
                                SDcurrently_selected.push(clicked_stim);
                            }
                        }
                    }
                    mouse_down = true;
                }
                if ((! mouse.getPressed()[0])) {
                    mouse_down = false;
                }
        }

        //press enter text
        if (trialClock.getTime() >= Number(test_loop.thisTrial['time_min'])){
            key_inst_text.setColor([-1,-1,-1]);
            key_inst_text.setAutoDraw(false);
            key_inst_text.setAutoDraw(true);
        }

        if (Number(test_loop.thisTrial['total_time_limit']) === 1){
            if (testClock.getTime() >= Number(test_loop.thisTrial["time_max"])){
                item_loop.finished = true;
                continueRoutine = false;
            }
        }

        if (Number(test_loop.thisTrial['time_max']) !== -1 && trialClock.getTime() >= Number(test_loop.thisTrial["time_max"])) {  // Check if 60 seconds have passed
            // Advance to the next trial
            //trialClock.reset();
            // Move to the next item in the loop
            continueRoutine = false;
        }
      End Experiment:
        win.close()
        core.quit()
      End JS Routine:
        if ((type_of_test === "multiple choice")) {
            if (currently_selected) {
                item_loop.addData("selected_answer", currently_selected);
                if ((currently_selected === item_loop.thisTrial["correct_answer"])) {
                    item_loop.addData("points", 1);
                    item_loop.addData("correct", 1);
                    item_loop.addData("incorrect", 0);
                    test_score += 1;
                } else { //incorrect choice
                    item_loop.addData("points", 0);
                    item_loop.addData("correct", 0);
                    item_loop.addData("incorrect", -1);
                }
            } else { //no attempt
                item_loop.addData("selected_answer", "no selection");
                item_loop.addData("points", 0);
                item_loop.addData("correct", 0);
                item_loop.addData("incorrect", 0);
            }
        } else {
        if (type_of_test === "fill in the blank") {
            // Get the entered text from the text entry box
            let entered_text = text_entry_box.text;

            // Remove new line characters
            let clean_text = entered_text.replace(/\n/g, "").replace(/\r/g, "");

            // Filter out non-alphanumeric characters and convert to lower case
            clean_text = clean_text.replace(/[^a-z0-9.]/gi, '');  // Keeps only alphanumeric characters
            clean_text = clean_text.toUpperCase();

            // Log the cleaned text to the item loop
            item_loop.addData("selected_answer", clean_text);

            // Check if the cleaned text matches the correct answer
            if (clean_text === item_loop.thisTrial["correct_answer"]) {
                item_loop.addData("points", 1);
                item_loop.addData("correct", 1);
                item_loop.addData("correct", 0);
                test_score += 1;
            } else if (clean_text == ''){ //no attempt
                item_loop.addData("points", 0);
                item_loop.addData("correct", 0);
                item_loop.addData("incorrect", 0);
            } else { //incorrect entry
                item_loop.addData("points", 0);
                item_loop.addData("correct", 0);
                item_loop.addData("incorrect", -1);
            }

            text_entry_box.setText('');

        }
        }

        if (type_of_test == "multiple selections"){
            let ms_corr = 0;
            let ms_incorr = 0;
            let perf_points = 0;
            let selected_answer_list = [];
            if (currently_selected.length){
                for (let i = 0; i < currently_selected.length; i += 1){
                    selected_answer_list.push(currently_selected[i].name);
                    if (item_loop.thisTrial["correct_answer"].includes(currently_selected[i].name)){
                        ms_corr += 1
                        } else {
                            ms_incorr -= 1
                        }
                    }
                 if (ms_corr + ms_incorr == 2) {
                    test_score += 1;
                    perf_points = 1;
                }
            }
                item_loop.addData("selected_answer", selected_answer_list);
                item_loop.addData("correct", ms_corr);
                item_loop.addData("incorrect", ms_incorr);
                item_loop.addData("points", perf_points);
            for (let selector_image of selector_images){
                selector_image.setAutoDraw(false);
            }
            selector_images = [];
        }
        if (type_of_test == 'same different'){
            //clear the selector images
            for (let selector_image of selector_images){
                selector_image.setAutoDraw(false);
            }
            selector_images = [];

            //score their answers
            let corr_ans = item_loop.thisTrial['correct_answer'];
            let sd_corr = 0;
            let sd_incorr = 0;
            let sd_item_score = 0;
            let perf_points = 0;
            for (let ans_box of SDcurrently_selected){
                if (corr_ans.includes(ans_box)){
                    sd_corr++;
                } else {
                    sd_incorr--;
                }
            }
            sd_item_score = sd_corr + sd_incorr;
            if (sd_item_score == 6){
                perf_points++;
            }
            item_loop.addData("selected_answer", SDcurrently_selected);
            item_loop.addData("points", perf_points);
            item_loop.addData("correct", sd_corr);
            item_loop.addData("incorrect", sd_incorr);
            test_score += sd_item_score
        }
      End Routine:
        if type_of_test == 'multiple choice':
            if currently_selected:
                item_loop.addData('selected_answer', currently_selected)
                if currently_selected == item_loop.thisTrial['correct_answer']:
                    item_loop.addData('correct', 1)
                    test_score += 1
                else:
                    item_loop.addData('correct', 0)
            else:
                item_loop.addData('selected_answer', 'no selection')
                item_loop.addData('correct', 0)

        elif type_of_test == 'fill in the blank':
            entered_text = text_entry_box.text
            clean_text = entered_text.replace('\n', '').replace('\r', '')
            clean_text = ''.join(filter(str.isalnum, clean_text))
            clean_text = clean_text.lower()

            item_loop.addData('EnteredText', clean_text)
            if clean_text == item_loop.thisTrial['correct_answer']:
                item_loop.addData('correct', 1)
            else:
                item_loop.addData('correct', 0)

        elif type_of_test == "multiple selections":
            ms_corr = 0
            if len(currently_selected):
                for i in range(len(currently_selected)):
                    item_loop.addData('selected_answer', currently_selected.name)
                    if currently_selected[i].name in item_loop.thisTrial["correct_answer"]:
                        ms_corr += 1
                    else:
                        ms_corr -= 1


                item_loop.addData("correct", ms_corr)
                if ms_corr == 2:
                    test_score += 1
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = $time_min
      store = all keys
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent key_inst_text
      color = 0.5608, 0.6000, 0.5922
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = Press Enter to submit your answer.
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  Routine set_vars
    RoutineSettingsComponent set_vars
      saveStartStop = False
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    CodeComponent set_vars_code1
      Code Type = Both
      Begin JS Routine:
        //randomize tests if randomize is set
        function shuffle(array) {
            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
           }
            return array;
        }

        if (randomized_blocks == false){
            let test_random_list = [];
            let test_order_list = [];
            //let first_test;
            //let last_test;
            let test_index_list = [];
            for (let test of test_loop.trialList){
                //if (test['test_order'] == 'F'){
                //    first_test = test;
                if (test['test_order'] == 'R'){
                    test_random_list.push(test);
                //} else if (test['test_order'] == 'L'){
                //    last_test = test;
                } else {
                    test_index_list.push([test, test['test_order']]);
                }
            }
            //arrange tests in the specified order, randomizing R tests
            //if (first_test){
            //    test_order_list.push(first_test);
            //}

            shuffle(test_random_list);
            //if (test_order_list.length > 0) {
            //    test_order_list = test_order_list.concat(test_random_list);
            //} else {
            test_order_list = test_random_list;

            // Sort test_index_list by the second value (index)
            test_index_list.sort(function(a, b) {
                return a[1] - b[1];  // Compare the indices (second element in each pair)
            });

            //put tests with specific slots into those slots
            for (let test_order_pair of test_index_list){
                test_order_list.splice(test_order_pair[1], 0, test_order_pair[0]);
            }

            //if (last_test){
            //    test_order_list.push(last_test);
            //}
            //console.log(test_order_list);



            //set test loop trial list to new order
            // Overwrite each item in place to update the loop's internal trial order
            for (let i = 0; i < test_loop.trialList.length; i++) {
                test_loop.trialList[i] = test_order_list[i];
            }
            randomized_blocks = true;

            //force thisTrial to update
            test_loop.thisTrial = test_loop.trialList[0];

        }



        choices = test_loop.thisTrial["choices"];
        name_of_test = test_loop.thisTrial["name_of_test"];

        stim_folder = test_loop.thisTrial["stim_folder"];
        stim_file = test_loop.thisTrial["stim_file"];

        type_of_test = test_loop.thisTrial["type_of_test"];
        instructions_pages = test_loop.thisTrial["instructions_pages"];
        instructions_file = test_loop.thisTrial["instructions_file"];
        practice_items = test_loop.thisTrial["practice_items"];
        items = test_loop.thisTrial["items"];
        time_min = test_loop.thisTrial["time_min"];
        time_max = test_loop.thisTrial["time_max"];
        shuffled_trials = false;

        test_score = 0;
        score_dict[name_of_test] = {"score": null, "possible": null, "prev_scores": test_loop.thisTrial["prev_scores"]};
        score_dict_set = false;

        previous_attempts = 0;
        previously_selected = [];
        current_state = 'advance';

        if ((type_of_test === "multiple selections")) {
            click_boxes = {};
            for (var i, _pj_c = 0, _pj_a = util.range(choices), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                click_boxes[("click_box" + i.toString())] = new visual.Rect({
                                                                             win: psychoJS.window,                                                                     name: "Rclick_box" + i.toString(),
                                                                             //edges: 4,
                                                                             size: [200 * scale, 200 * scale],
                                                                             pos: [0, 0],
                                                                             lineColor: new util.Color([-1,-1,-1]),
                                                                             fillColor: new util.Color([1,1,1]),
                                                                             lineWidth: 5 * scale,
                                                                             units: 'pix',        // Specify units
                                                                             opacity: 1.0,       // Fully opaque
                                                                             depth: -100,           // Default depth
                                                                             autoDraw: true,       // Draw automatically
                                                                             colorSpace: "rgb"
                                                                             });

            }
        } else if (type_of_test == 'multiple choice') {
                selector_box.setImage(test_loop.thisTrial['selector_box_image']);
                prev_ans_index = 0;
        }


        prev_att_correct = false;

        prev_text_box_answer = '';

        retry_count = 0;
        practice_retry = false;
      Begin Routine:
        choices = test_loop.thisTrial['choices']
        name_of_test = test_loop.thisTrial['name_of_test']
        stim_folder = test_loop.thisTrial['stim_folder']
        stim_file = test_loop.thisTrial['stim_file']
        type_of_test = test_loop.thisTrial['type_of_test']
        instructions_pages = test_loop.thisTrial['instructions_pages']
        instructions_file = test_loop.thisTrial['instructions_file']
        practice_items = test_loop.thisTrial['practice_items']
        items = test_loop.thisTrial['items']
        time_min = test_loop.thisTrial['time_min']
        time_max = test_loop.thisTrial['time_max']

        test_score = 0

        score_dict[f'{name_of_test}'] = {'score': None,
                                         'possible': None,
                                         'prev_scores': None}
        score_dict_set = False

        if type_of_test == 'multiple selections':
            click_boxes = {}
            for i in range(choices):
                print(i)
                click_boxes['click_box' + str(i)] = visual.Rect(win=win,
                                                           name=f'click_box{i}',
                                                           width=0,
                                                           height=0,
                                                           pos=(-2000 * scale, 0),
                                                           lineColor='black',
                                                           fillColor='white',
                                                           lineWidth=2 * scale)
                click_boxes['click_box' + str(i)].setAutoDraw(True)
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  Routine init
    RoutineSettingsComponent init
      saveStartStop = False
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    CodeComponent init_code
      Code Type = Both
      Begin Experiment:
        #initialize screen size
        screen_size = win.size

        if screen_size[1] / screen_size[0] > (1080 / 1920):
            screen_size[1] = (screen_size[0] * (1080 / 1920))
        elif (((screen_size[0] / screen_size[1]) > (1920 / 1080))):
            screen_size[0] = (screen_size[1] * (1920 / 1080))

        scale = (screen_size[0] / 2000)


        item_stim = visual.ImageStim(win=win,
                                     name='item_stim',
                                     image=None,
                                     size = [screen_size[0], screen_size[1]],
                                     pos=[0,0],
                                     units = 'pix',
                                     color = [-1,-1,-1],
                                     colorSpace = 'bgr',
                                     opacity = 1)
        item_stim.setAutoDraw(True)

        selector_box = visual.Rect(win=win,
                                   width=0,
                                   height=0,
                                   pos=(-1.5 * screen_size[0], 0),
                                   lineColor='green',
                                   fillColor=None,
                                   lineWidth=5 * scale)
        selector_box.setAutoDraw(True)

        score_dict = {}

        coords = []
        click_boxes = {}

        trialClock = core.Clock()  # Initialize the clock

        previous_correct = 0
        previous_attempts = 0
        current_state = 'advance'
      Begin JS Experiment:
        //initialize screen size
        screen_size = psychoJS.window.size;

        let new_screen_width = screen_size[0];
        let new_screen_height = screen_size[1];

        if (((screen_size[1] / screen_size[0]) > (1080 / 1920))) {
            new_screen_height = (screen_size[0] * (1080 / 1920));
        } else {
            if (((screen_size[0] / screen_size[1]) > (1920 / 1080))) {
                new_screen_width = (screen_size[1] * (1920 / 1080));
            }
        }
        screen_size = [new_screen_width, new_screen_height];
        scale = (screen_size[0] / 1920);


        item_stim = new visual.ImageStim({
                                          win : psychoJS.window,
                                          name : 'item_stim',
                                          units : 'pix',
                                          image : 'selector.png',
                                          mask : undefined,
                                          anchor : 'center',
                                          ori : 0.0,
                                          pos : [0, 0],
                                          size : [screen_size[0], screen_size[1]],
                                          color : new util.Color([1,1,1]),
                                          opacity : 1,
                                          flipHoriz : false, flipVert : false,
                                          texRes : 128.0,
                                          interpolate : true,
                                          depth : 0.0
          });

        item_stim.setAutoDraw(true);

        selector_box = new visual.ImageStim({
                                        win: psychoJS.window,
                                        name: "selector_box",
                                        image: "selector.png",
                                        size: [200 * scale,50 * scale],
                                        pos: [-2000 * scale, 0],
                                        ori: 0.0,
                                        units: 'pix',        // Specify units
                                        opacity: 1.0,       // Fully opaque
                                        depth: -100,           // Default depth
                                        autoDraw: true,       // Draw automatically
                                        });

        score_dict = {};
        coords = [];
        click_boxes = {};

        trialClock = new util.Clock();  // Initialize the clock
        testClock = new util.Clock();

        previous_correct = 0;
        previous_attempts = 0;
        current_state = 'advance';
        click_boxes = {};



        //read url variable (participant)
        util.addInfoFromUrl(expInfo);

        randomized_blocks = false;
      Begin JS Routine:
        //redirect_url = init_loop.thisTrial['redirect_url'];
        //psychoJS.setRedirectUrls((redirect_url), '');
    TextboxComponent text_entry_box
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 30
      pos = (-2000, 0)
      size = (200, 50)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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  Routine feedback
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    ImageComponent blank_screen2
      image = break_image.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent blank_screen
      fillColor = white
      shape = rectangle
      size = (2000,2000)
      startVal [time (s)] = 0.0
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    CodeComponent feedback_code
      Code Type = Both
      Begin JS Routine:
        //image_stim.setImage = None;
        //image_stim.setAutoDraw(false);
        //image_stim.setAutoDraw(true);

        k = 0;
        number_of_tests = Object.keys(score_dict).length;
        spacing = (psychoJS.window.size[1] / (number_of_tests * 1.5));
        feedback_text_lines = {};

        feedback_text.height = 40 * scale;
        feedback_text.wrapWidth = screen_size[0] * .8;
        //console.log(number_of_tests);

        let test_skip = 0;
        for (let test of Object.keys(score_dict)){
            //console.log(score_dict[test]['score']);
            if (score_dict[test]['score'] == "exclude"){
                test_skip++;
            }
        }
            //if all tests are marked to not score
        if (test_skip >= number_of_tests){
            continueRoutine = false;
            feedback_text.text = 'Thank you for completing this experiment! Press Enter to close the page.';
        } else {
            for (var test, _pj_c = 0, _pj_a = Object.keys(score_dict), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                let test = _pj_a[_pj_c];
                let test_name = Object.keys(score_dict)[k];
                let test_score_dict = Object.values(score_dict)[k];
                let score = test_score_dict["score"];
                let possible = test_score_dict["possible"];
                let score_text = test_name + ": " + score.toString() + " out of " + possible.toString();
                feedback_text.text = feedback_text.text + '\n' + '\n' + score_text;
                let rank = 0;
                prev_scores = test_score_dict["prev_scores"];
                for (var s, _pj_f = 0, _pj_d = prev_scores, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    s = _pj_d[_pj_f];
                    if ((score >= s)) {
                        rank += 1;
                    }
                }
                let percentile = (rank / prev_scores.length);
                feedback_text.text = feedback_text.text + '\n\n' + 'You scored better than ' + percentile + '% of previous participants.';
                k += 1;
            }
        }
      Begin Routine:
        k = 0

        number_of_tests = len(score_dict)
        spacing = win.size[1] / (number_of_tests * 1.5)

        feedback_text_lines = {}
        visual.Rect(win=win,
                    width=win.size[0],
                    height=win.size[1],
                    fillColor='white',
                    lineColor='white',
                    autoDraw = True,
                    pos= (0,0))

        for test in score_dict.keys():
            test_name = list(score_dict.keys())[k]
            test_score_dict = list(score_dict.values())[k]
            score = test_score_dict['score']
            possible = test_score_dict['possible']
            score_text = f'{test_name}: {score} out of {possible}'
            visual.TextStim(win, text=score_text,
                            name = f'{test_name}_score_text',
                            color='black',
                            pos=(0, (number_of_tests/2 - k) * spacing * scale),
                            height=40 * scale,
                            autoDraw = True,
                            wrapWidth = win.size[0] - .2 * win.size[0])

            rank = 0
            prev_scores = test_score_dict['prev_scores']
            for s in prev_scores:
                if score >= s:
                    rank += 1
            percentile = rank/len(prev_scores)
            visual.TextStim(win=win,
                            name = f'{test_name} percent_text',
                            text = f'You scored better than {percentile} % of previous participants.',
                            color = 'black',
                            pos=(0, (number_of_tests/2 - k) * spacing - 50) * scale,
                            height = 40,
                            autoDraw = True,
                            wrapWidth = win.size[0] - .2 * win.size[0])
            k += 1
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent feedback_text
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
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  Routine repeat_logic
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    CodeComponent repeat_logic_code
      Code Type = Both
      Begin JS Routine:
        if ((current_state == "advance")) {
            repeat_inst.finished = true;
        }
      Begin Routine:
        if current_state == 'advance':
            repeat_inst.finished = True
  Routine score_break
    RoutineSettingsComponent score_break
      saveStartStop = False
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    ImageComponent blank_screen3
      image = break_image.png
      size = [1920, 1080]
      startVal [time (s)] = 0.0
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    CodeComponent score_code
      Code Type = Both
      Begin JS Routine:
        blank_screen3.setSize([1920 * scale, 1080 * scale]);
        blank_screen3.setAutoDraw(false);
        blank_screen3.setAutoDraw(true);
        if (name_of_test == 'ACF' || name_of_test == 'AC1' || name_of_test == 'AC2' || name_of_test == 'Demos'){
            continueRoutine = false;
        }

        if (test_loop.thisTrial['include_score'] == 1){
            score_dict[name_of_test]["score"] = test_score;
        } else {
            score_dict[name_of_test]["score"] = 'exclude';
        }

        if ((type_of_test === "fill in the blank")) {
            text_entry_box.setPos([(-2000 * scale), 0]);
            text_entry_box.setEditable(false);
        }
        selector_box.setPos([(-2000 * scale), 0]);
        if ((click_boxes != null)) {
            if ((Object.values(click_boxes).length > 0)) {
                for (var i, _pj_c = 0, _pj_a = util.range(Object.values(click_boxes).length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    click_boxes[("click_box" + i.toString())].setAutoDraw(false);
                }
            }
        }

        //tell the participant how many tests they've done so far
        //and how many left to go
        tests_complete = Object.keys(score_dict).length;
        for (let key of Object.keys(score_dict)){
            if (key == 'AC1' || key == 'AC2' || key == 'ACF' || key == 'Demos'){
                tests_complete--;
            }
        }
        //minus 3 for att checks
        tests_total = test_loop.trialList.length - 4;

        break_message_text.text = 'You have completed ' + tests_complete.toString() + ' out of ' + tests_total.toString() + ' tests.';
        break_message_text.setPos([0, 400 * scale]);
        break_message_text.height = 35 * scale;
        break_message_text.setWrapWidth(1200 * scale);
        break_message_text.setAutoDraw(false);
        break_message_text.setAutoDraw(true);

        if (tests_complete < tests_total){
            break_message.text = 'Good job! You have finished this test. Feel free to take a break now before beginning the next test, but try not to stop in the middle of a test. Press Enter when you are ready to move on to the next test.'
        } else {
            break_message.text = 'Good job! You have finished this test. Press Enter to continue.';
        }
        break_message.height = 35 * scale;
        break_message.setWrapWidth(1200 * scale);
        break_message.setAutoDraw(false);
        break_message.setAutoDraw(true);
      Begin Routine:
        score_dict[name_of_test]['score'] = test_score

        if type_of_test == 'fill in the blank':
            text_entry_box.pos = [-2000 * scale, 0]
            text_entry_box.editable = False

        selector_box.setPos((-2000 * scale,0))


        #remove any previous clickboxes
        if click_boxes != None:
            if len(list(click_boxes.values())) > 0:
                for i in range(len(list(click_boxes.values()))):
                    click_boxes["click_box" + str(i)].setAutoDraw(False)
    KeyboardComponent break_key_press
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent break_message
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
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    TextComponent break_message_text
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
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  Routine intro_screen
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    ImageComponent intro_image
      image = intro.png
      size = (1920,1080)
      startVal [time (s)] = 0.0
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    CodeComponent intro_code
      Code Type = Both
      Begin JS Routine:
        intro_image.size = [1920 * scale, 1080 * scale];
        intro_image.setAutoDraw(false);
        intro_image.setAutoDraw(true);
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
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    ImageComponent consent_image
      image = consent.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent consent_code
      Code Type = Both
      Begin JS Routine:
        consent_image.size = [1920 * scale, 1080 * scale];
        consent_image.setAutoDraw(false);
        consent_image.setAutoDraw(true);
    KeyboardComponent consent_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine end
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    CodeComponent code_2
      Code Type = JS
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      Before JS Experiment:
        jQuery.getScript("https://cdn.jsdelivr.net/npm/@supabase/supabase-js@2");
      Begin JS Experiment:
        psychoJS._saveResults = 0;  // stop it from trying to POST to Pavlovia
        var urlParams = new URLSearchParams(window.location.search);
        var sessionId = urlParams.get('session');
      Begin JS Routine:
        const supabaseClient = supabase.createClient(
          "https://lfboldtuuwfayloofdnm.supabase.co",
          "sb_publishable_EfNrQHSaudaeiW-DYB5S0A_W863mPxN"
        );
        supabaseClient.from('psychojs_results').insert({
          session_id: sessionId,
          trials: psychoJS._experiment._trialsData
        });
Flow
  LoopInitiator init_loop loopType="TrialHandler"
    conditionsFile = test_list.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('name_of_test', 'Demos'), ('stim_folder', 'Demos_Stimuli'), ('stim_file', 'Demos_Stimuli.csv'), ('type_of_test', 'multiple selections'), ('instructions_file', 'Demos_Instructions.csv'), ('choices', 4), ('time_min', 1), ('time_max', 60), ('total_time_limit', 0), ('selector_box_image', 'x_selector.png'), ('randomize', 0), ('test_order', 12.0), ('prev_scores', [1, 2, 3, 4, 5]), ('include_score', 0)]),
      OrderedDict([('name_of_test', 'SBST'), ('stim_folder', 'SBST_Stimuli'), ('stim_file', 'SBST_Stimuli.csv'), ('type_of_test', 'multiple choice'), ('instructions_file', 'SBST_Instructions.csv'), ('choices', 4), ('time_min', 5), ('time_max', 60), ('total_time_limit', 0), ('selector_box_image', 'selector.png'), ('randomize', 1), ('test_order', 'R'), ('prev_scores', [1, 2, 3, 4, 5]), ('include_score', 0)]),
      OrderedDict([('name_of_test', 'PFT'), ('stim_folder', 'PFT_Stimuli'), ('stim_file', 'PFT_Stimuli.csv'), ('type_of_test', 'multiple choice'), ('instructions_file', 'PFT_Instructions.csv'), ('choices', 4), ('time_min', 5), ('time_max', 60), ('total_time_limit', 0), ('selector_box_image', 'selector.png'), ('randomize', 1), ('test_order', 'R'), ('prev_scores', [1, 2, 3, 4, 5]), ('include_score', 0)]),
      OrderedDict([('name_of_test', 'SD'), ('stim_folder', 'SD_Stimuli'), ('stim_file', 'SD_Stimuli.csv'), ('type_of_test', 'fill in the blank'), ('instructions_file', 'SD_Instructions.csv'), ('choices', 4), ('time_min', 5), ('time_max', 60), ('total_time_limit', 0), ('selector_box_image', 'selector.png'), ('randomize', 1), ('test_order', 'R'), ('prev_scores', [1, 2, 3, 4, 5]), ('include_score', 0)])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
    Routine init
  LoopTerminator init_loop
  Routine consent
  Routine intro_screen
  LoopInitiator test_loop loopType="TrialHandler"
    conditions = [OrderedDict([('name_of_test', 'Demos'), ('stim_folder', 'Demos_Stimuli'), ('stim_file', 'Demos_Stimuli.csv'), ('type_of_test', 'multiple selections'), ('instructions_file', 'Demos_Instructions.csv'), ('choices', 4), ('time_min', 0), ('time_max', 60), ('total_time_limit', 0), ('selector_box_image', 'x_selector.png'), ('randomize', 0), ('test_order', 12), ('prev_scores', [1, 2, 3, 4, 5]), ('include_score', 0)])]
    conditionsFile = test_list.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine set_vars
    LoopInitiator repeat_inst loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      LoopInitiator instructions_loop loopType="TrialHandler"
        conditions = [OrderedDict([('instructions_page', 'D_Instructions1.png'), ('answer_positionPX', [740, 950, 1161, 1370, 1582]), ('answer_positionPY', [644, 644, 644, 644, 644]), ('selector_sizeP', [143, 201]), ('correct_answerP', 'Pans_box_C'), ('practice_item', 0), ('feedback', 0), ('att_check', 0), ('retry', 0)])]
        conditionsFile = $instructions_file
        loopType = sequential
        nReps = 1
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        Routine instructions
      LoopTerminator instructions_loop
      Routine repeat_logic
    LoopTerminator repeat_inst
    LoopInitiator item_loop loopType="TrialHandler"
      conditions = [OrderedDict([('standard_stim', 'AO_1.png'), ('answer_positionX', [0, 0]), ('answer_positionY', [0, 0]), ('selector_size', [0, 0]), ('correct_ans', 1)])]
      conditionsFile = $stim_file
      loopType = sequential
      nReps = 1
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      Routine item
    LoopTerminator item_loop
    Routine score_break
  LoopTerminator test_loop
  Routine feedback
  Routine end
